PsychoPy2experiment version="2023.1.3"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['A_justice.png', 'B_empathy.png', 'blue_agent.png', 'C_justice.png', 'C_justice_delay.png', 'change.png', 'changedown.png', 'changeup.png', 'help.jpg', 'orange_agent.png', 'over.jpg', 'over_rest.jpg', 'practice.jpg', 'punish.jpg', 'red_agent.png', 'remain.png', 'sameblue.png', 'sameorange.png', 'start.jpg']
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  color = black
  expName = 测试程序2.0
  keyboardBackend = ioHub
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Routines
  Routine start
    ImageComponent image
      image [set every repeat] = start.jpg
      pos = (0, -0.1)
      saveStartStop = False
      size = (1.92,1.08)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine over
    ImageComponent image_4
      image [set every repeat] = $overpic
      saveStartStop = False
      size = (1.33, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    KeyboardComponent key_resp_4
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine rest
    TextComponent text
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    CodeComponent code_10
      Code Type = Auto->JS
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      Begin Routine:
        if numA == changeA and numB == changeB:
            durations = ["即刻", "1天", "10天", "30天", "90天", "365天", "即刻", "1天", "10天", "30天", "90天", "365天"]

            if not hasattr(thisExp, 'delay_index'):
                thisExp.delay_index = 0

            if thisExp.delay_index < len(durations):
                delaytime_keep = durations[thisExp.delay_index]
                thisExp.delay_index += 1
            else:
                delaytime_keep = delaytime_keep  # 保持上一次赋值，或者设置其他默认值
        else:
            delaytime_keep = delaytime
      End Routine:
        thisExp.addData('delaytime_keep', delaytime_keep)
  Routine practice
    ImageComponent image_2
      image = practice.jpg
      saveStartStop = False
      size = (1.33, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    CodeComponent code_4
      Code Type = Both
      Before Experiment:
        # 定义 Q_LOOP、GN初始值为一个空字符串
        Q_LOOP= ""
        GN = ""
      Before JS Experiment:
        // 定义 Q_LOOP 变量
        var Q_LOOP= "";
        // 定义 GN 变量
        var GN = "";
      Begin Experiment:
        from random import uniform
        # 生成范围在[0,6]之间的随机数
        random_number = uniform(0, 6)


        # 使用条件语句来设置 Q_LOOP 的值
        if 0 <= random_number < 1:
            Q_LOOP = "ABC"
        elif 1 <= random_number < 2:
            Q_LOOP = "ACB"
        elif 2 <= random_number < 3:
            Q_LOOP = "BAC"
        elif 3 <= random_number < 4:
            Q_LOOP = "BCA"
        elif 4 <= random_number < 5:
            Q_LOOP = "CAB"
        else:
            Q_LOOP = "CBA"


        # 使用条件语句根据随机数的大小设置 GN 变量的值
        if random_number <= 3:
            GN = "GroupA"
        else:
            GN = "GroupB"

        thisExp.addData('random_number', random_number)
        thisExp.addData('GN', GN)
        thisExp.addData('Q_LOOP', Q_LOOP)
      Begin JS Experiment:
        // 生成范围在 [0, 6] 之间的随机数
        var random_number = Math.random() * 6; // Math.random() 返回 [0, 1) 之间的随机数，乘以 6 将其映射到 [0, 6) 之间



        // 使用条件语句来设置 Q_LOOP 的值
        if (0 <= random_number && random_number < 1) {
            Q_LOOP = "ABC";
        } else if (1 <= random_number && random_number < 2) {
            Q_LOOP = "ACB";
        } else if (2 <= random_number && random_number < 3) {
            Q_LOOP = "BAC";
        } else if (3 <= random_number && random_number < 4) {
            Q_LOOP = "BCA";
        } else if (4 <= random_number && random_number < 5) {
            Q_LOOP = "CAB";
        } else {
            Q_LOOP = "CBA";
        }


        // 使用条件语句根据随机数的大小设置 GN 变量的值
        if (random_number <= 3) {
            GN = "GroupA";
        } else {
            GN = "GroupB";
        }

        psychoJS.experiment.addData("random_number", random_number);
        psychoJS.experiment.addData("GN", GN);
        psychoJS.experiment.addData("Q_LOOP", Q_LOOP);
  Routine rest_practice
    TextComponent text_2
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine start_pic
    ImageComponent image_3
      image [set every repeat] = $startpic
      pos = (0, -0.1)
      saveStartStop = False
      size = (1.92,1.08)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 2
      store = nothing
      syncScreenRefresh = False
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  Routine practice_trial4
    TextComponent text_left
      letterHeight = 0.03
      pos = (-0.38, -0.39)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        -50
        非常不正义
    TextComponent text_right
      letterHeight = 0.03
      pos = (0.38,-0.39)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        50
        非常正义
    TextComponent time_2
      letterHeight = 0.045
      pos = (0, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 匹配时间：
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    TextComponent time_delay
      color = red
      letterHeight = 0.045
      pos = (0.2,-0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $delaytime_prac
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    TextComponent A_previous
      color = red
      letterHeight = 0.045
      pos = (-0.0425, 0.345)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $numA
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    TextComponent A_now_practice_3
      color = red
      letterHeight = 0.045
      pos = (-0.0425, 0.275)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $changeA
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    ImageComponent A_agent
      image = red_agent.png
      pos = (-0.2, 0.35)
      saveStartStop = False
      size = (0.16, 0.24)
      startVal [time (s)] = 0.0
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    TextComponent B_previous
      color = lightskyblue
      letterHeight = 0.045
      pos = (0.0425, 0.345)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $numB
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    TextComponent B_now_practice_3
      color = lightskyblue
      letterHeight = 0.045
      pos = (0.0425, 0.275)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $changeB
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    ImageComponent B_agent
      image = blue_agent.png
      pos = (0.2, 0.35)
      saveStartStop = False
      size = (0.16, 0.24)
      startVal [time (s)] = 0.0
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    ImageComponent C_agent
      image [set every repeat] = orange_agent.png
      pos = (-0.2, 0.09)
      saveStartStop = False
      size = (0.16, 0.26)
      startVal [time (s)] = 0.0
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    SliderComponent slider_practice3
      color = White
      forceEndRoutine = False
      granularity = 1
      letterHeight = 0.05
      pos = (0, -0.33)
      size = (0.75, 0.035)
      startVal [time (s)] = 0.0
      storeHistory = True
      styles = slider
      ticks = (-50,-25,0,25,50)
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    ImageComponent Symbol
      image [set every repeat] = $symbol
      pos [set every repeat] = posi_X
      saveStartStop = False
      size = (0.17, 0.165)
      startVal [time (s)] = 0.0
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    ImageComponent image_changeorremain
      image [set every repeat] = $cr
      pos = (0.08, 0.08)
      saveStartStop = False
      size = (0.35, 0.1)
      startVal [time (s)] = 0.0
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    ButtonComponent button
      bold = True
      fillColor = blue
      forceEndRoutine = True
      letterHeight = 0.025
      pos = (0, -0.45)
      saveStartStop = False
      size = [0.12,0.05]
      startVal [condition] = $show_button_p3
      text = Click
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    TextComponent Qmark_p3
      letterHeight = 0.05
      pos = (0, -0.39)
      startVal [time (s)] = 0.0
      text [set every frame] = ?
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    CodeComponent code
      Code Type = Both
      Begin JS Routine:
        show_button_p3 = false;
      Begin Routine:
        show_button_p3 = False
      Each Frame:
        # 手动将None转换为undefined（而非null）
        show_button_p3 = slider_practice3.getRating() is not None
        print(slider_practice3.getRating())

        if show_button_p3:
            Qmark_p3.text = slider_practice3.getRating()
      Each JS Frame:
        show_button_p3 = (slider_practice3.getRating() !== undefined);
        if (show_button_p3) {
            Qmark_p3.text = slider_practice3.getRating();
        }
    TextComponent A
      color = red
      letterHeight = 0.03
      pos = (-0.2, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $anumA
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    TextComponent B
      color = lightskyblue
      letterHeight = 0.03
      pos = (0.2, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $anumB
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    TextComponent C
      color [set every repeat] = orange
      letterHeight = 0.03
      pos = (-0.2, -0.06)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $anumC
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    ImageComponent QUESTION_prac4
      image [set every repeat] = C_justice_delay.png
      interpolate = nearest
      pos = (0, -0.24)
      size = (0.64, 0.107)
      startVal [time (s)] = 0.0
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  Routine practice_trial1_3
    TextComponent text_left_3
      letterHeight = 0.03
      pos [set every repeat] = (-0.38, -0.37)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $L_point
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    TextComponent text_right_3
      letterHeight = 0.03
      pos [set every repeat] = (0.38,-0.37)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $R_point
    TextComponent time_3
      letterHeight = 0.045
      pos = (0, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 匹配时间：
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    TextComponent time_delay_3
      color = red
      letterHeight = 0.045
      pos = (0.2,-0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $delaytime_prac
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    TextComponent A_previous_3
      color = red
      letterHeight = 0.045
      pos = (-0.0425, 0.345)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $numA
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    TextComponent A_now_practice_1
      color = red
      letterHeight = 0.045
      pos = (-0.0425, 0.275)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $changeA
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    ImageComponent A_agent_3
      image = red_agent.png
      pos = (-0.2, 0.35)
      saveStartStop = False
      size = (0.16, 0.24)
      startVal [time (s)] = 0.0
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    TextComponent B_previous_3
      color = lightskyblue
      letterHeight = 0.045
      pos = (0.0425, 0.345)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $numB
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    TextComponent B_now_practice_1
      color = lightskyblue
      letterHeight = 0.045
      pos = (0.0425, 0.275)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $changeB
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    ImageComponent B_agent_3
      image = blue_agent.png
      pos = (0.2, 0.35)
      saveStartStop = False
      size = (0.16, 0.24)
      startVal [time (s)] = 0.0
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    ImageComponent C_agent_3
      image [set every repeat] = orange_agent.png
      pos = (-0.2, 0.09)
      saveStartStop = False
      size = (0.16, 0.26)
      startVal [time (s)] = 0.0
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    SliderComponent slider_practice1
      color = White
      forceEndRoutine = False
      granularity = 1
      letterHeight = 0.05
      pos = (0, -0.33)
      size = (0.75, 0.035)
      startVal [time (s)] = 0.0
      storeHistory = True
      styles = slider
      ticks = (-50,-25,0,25,50)
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    ImageComponent Symbol_3
      image [set every repeat] = $symbol
      pos [set every repeat] = posi_X
      saveStartStop = False
      size = (0.17, 0.165)
      startVal [time (s)] = 0.0
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    ImageComponent image_changeorremain_3
      image [set every repeat] = $cr
      pos = (0.08, 0.08)
      saveStartStop = False
      size = (0.35, 0.1)
      startVal [time (s)] = 0.0
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    ButtonComponent button_3
      bold = True
      fillColor = blue
      forceEndRoutine = True
      letterHeight = 0.025
      pos = (0, -0.45)
      saveStartStop = False
      size = [0.12,0.05]
      startVal [condition] = $show_button_p1
      text = Click
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    TextComponent Qmark_p1
      letterHeight = 0.05
      pos = (0, -0.39)
      startVal [time (s)] = 0.0
      text [set every frame] = ?
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    CodeComponent code_3
      Code Type = Both
      Begin JS Routine:
        show_button_p1= false;
      Begin Routine:
        show_button_p1= False
      Each Frame:
        # 手动将None转换为undefined（而非null）
        show_button_p1 = slider_practice1.getRating() is not None
        print(slider_practice1.getRating())

        if show_button_p1:
            Qmark_p1.text = slider_practice1.getRating()
      Each JS Frame:
        show_button_p1 = (slider_practice1.getRating() !== undefined);
        if (show_button_p1) {
            Qmark_p1.text = slider_practice1.getRating();
        }
    TextComponent A_3
      color = red
      letterHeight = 0.03
      pos = (-0.2, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $anumA
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    TextComponent B_3
      color = lightskyblue
      letterHeight = 0.03
      pos = (0.2, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $anumB
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    TextComponent C_3
      color [set every repeat] = orange
      letterHeight = 0.03
      pos = (-0.2, -0.06)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $anumC
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    TextComponent pt1_L
      letterHeight = 0.03
      pos [set every repeat] = (-0.38, -0.41)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $L_L
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    TextComponent pt1_R
      letterHeight = 0.03
      pos [set every repeat] = (0.38, -0.41)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $L_R
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    ImageComponent QUESTION_prac123
      image [set every repeat] = $Q1
      interpolate = nearest
      pos = (0, -0.24)
      size = (0.64, 0.107)
      startVal [time (s)] = 0.0
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  Routine trial4
    TextComponent text_left_2
      letterHeight = 0.03
      pos = (-0.38, -0.39)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        -50
        非常不正义
    TextComponent text_right_2
      letterHeight = 0.03
      pos = (0.38, -0.39)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        50
        非常正义
    TextComponent time
      letterHeight = 0.045
      pos = (0, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 匹配时间：
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    TextComponent time_delay_2
      color = red
      letterHeight = 0.045
      pos = (0.2,-0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $delaytime_keep
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    TextComponent A_previous_2
      color = red
      letterHeight = 0.045
      pos = (-0.0425, 0.345)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $numA
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    TextComponent A_now_3
      color = red
      letterHeight = 0.045
      pos = (-0.0425, 0.275)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $changeA
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    ImageComponent A_agent_2
      image = red_agent.png
      pos = (-0.2, 0.35)
      saveStartStop = False
      size = (0.16, 0.24)
      startVal [time (s)] = 0.0
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    TextComponent B_previous_2
      color = lightskyblue
      letterHeight = 0.045
      pos = (0.0425, 0.345)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $numB
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    TextComponent B_now_3
      color = lightskyblue
      letterHeight = 0.045
      pos = (0.0425, 0.275)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $changeB
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    ImageComponent B_agent_2
      image = blue_agent.png
      pos = (0.2, 0.35)
      saveStartStop = False
      size = (0.16, 0.24)
      startVal [time (s)] = 0.0
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    ImageComponent C_agent_2
      image [set every repeat] = orange_agent.png
      pos = (-0.2, 0.09)
      saveStartStop = False
      size = (0.16, 0.26)
      startVal [time (s)] = 0.0
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    SliderComponent slider_3
      color = White
      forceEndRoutine = False
      granularity = 1
      letterHeight = 0.05
      pos = (0, -0.33)
      size = (0.75, 0.035)
      startVal [time (s)] = 0.0
      storeHistory = True
      styles = slider
      ticks = (-50,-25,0,25,50)
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    ImageComponent Symbol_2
      image [set every repeat] = $symbol
      pos [set every repeat] = posi_X
      saveStartStop = False
      size = (0.17, 0.165)
      startVal [time (s)] = 0.0
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    ImageComponent image_changeorremain_2
      image [set every repeat] = $cr
      pos = (0.08, 0.08)
      saveStartStop = False
      size = (0.35, 0.1)
      startVal [time (s)] = 0.0
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    ButtonComponent button_2
      bold = True
      fillColor = blue
      forceEndRoutine = True
      letterHeight = 0.025
      pos = (0, -0.45)
      saveStartStop = False
      size = [0.12,0.05]
      startVal [condition] = $show_button3
      text = Click
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    TextComponent Qmark3
      letterHeight = 0.05
      pos = (0, -0.39)
      startVal [time (s)] = 0.0
      text [set every frame] = ?
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    CodeComponent code_2
      Code Type = Both
      Begin JS Routine:
        show_button3 = false;
      Begin Routine:
        show_button3 = False
      Each Frame:
        # 手动将None转换为undefined（而非null）
        show_button3 = slider_3.getRating() is not None
        print(slider_3.getRating())

        if show_button3:
            Qmark3.text = slider_3.getRating()
      Each JS Frame:
        show_button3 = (slider_3.getRating() !== undefined);
        if (show_button3) {
            Qmark3.text = slider_3.getRating();
        }
    TextComponent A_2
      color = red
      letterHeight = 0.03
      pos = (-0.2, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $anumA
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    TextComponent B_2
      color = lightskyblue
      letterHeight = 0.03
      pos = (0.2, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $anumB
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    TextComponent C_2
      color [set every repeat] = orange
      letterHeight = 0.03
      pos = (-0.2, -0.06)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $anumC
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    ImageComponent QUESTION_4
      image [set every repeat] = C_justice_delay.png
      interpolate = nearest
      pos = (0, -0.24)
      size = (0.64, 0.107)
      startVal [time (s)] = 0.0
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    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Routine:
        thisExp.addData('delaytime_keep', delaytime_keep)
  Routine trial1_3
    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        thisExp.addData('delaytime_keep', delaytime_keep)
    TextComponent text_left_6
      letterHeight = 0.03
      pos = (-0.38, -0.37)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $L_point
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    TextComponent text_right_6
      letterHeight = 0.03
      pos = (0.38,-0.37)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $R_point
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    TextComponent time_6
      letterHeight = 0.045
      pos = (0, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 匹配时间：
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    TextComponent time_delay_6
      color = red
      letterHeight = 0.045
      pos = (0.2,-0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $delaytime_keep
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    TextComponent A_previous_6
      color = red
      letterHeight = 0.045
      pos = (-0.0425, 0.345)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $numA
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    TextComponent A_now_2
      color = red
      letterHeight = 0.045
      pos = (-0.0425, 0.275)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $changeA
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    ImageComponent A_agent_6
      image = red_agent.png
      pos = (-0.2, 0.35)
      saveStartStop = False
      size = (0.16, 0.24)
      startVal [time (s)] = 0.0
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    TextComponent B_previous_6
      color = lightskyblue
      letterHeight = 0.045
      pos = (0.0425, 0.345)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $numB
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    TextComponent B_now_2
      color = lightskyblue
      letterHeight = 0.045
      pos = (0.0425, 0.275)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $changeB
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    ImageComponent B_agent_6
      image = blue_agent.png
      pos = (0.2, 0.35)
      saveStartStop = False
      size = (0.16, 0.24)
      startVal [time (s)] = 0.0
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    ImageComponent C_agent_6
      image [set every repeat] = orange_agent.png
      pos = (-0.2, 0.09)
      saveStartStop = False
      size = (0.16, 0.26)
      startVal [time (s)] = 0.0
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    SliderComponent slider_1
      color = White
      forceEndRoutine = False
      granularity = 1
      letterHeight = 0.05
      pos = (0, -0.33)
      size = (0.75, 0.035)
      startVal [time (s)] = 0.0
      storeHistory = True
      styles = slider
      ticks = (-50,-25,0,25,50)
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    ImageComponent Symbol_6
      image [set every repeat] = $symbol
      pos [set every repeat] = posi_X
      saveStartStop = False
      size = (0.17, 0.165)
      startVal [time (s)] = 0.0
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    ImageComponent image_changeorremain_6
      image [set every repeat] = $cr
      pos = (0.08, 0.08)
      saveStartStop = False
      size = (0.35, 0.1)
      startVal [time (s)] = 0.0
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    ButtonComponent button_6
      bold = True
      fillColor = blue
      forceEndRoutine = True
      letterHeight = 0.025
      pos = (0, -0.45)
      saveStartStop = False
      size = [0.12,0.05]
      startVal [condition] = $show_button1
      text = Click
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    TextComponent Qmark1
      letterHeight = 0.05
      pos = (0, -0.39)
      startVal [time (s)] = 0.0
      text [set every frame] = ?
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    CodeComponent code_6
      Code Type = Both
      Begin JS Routine:
        show_button1 = false;
      Begin Routine:
        show_button1 = False
      Each Frame:
        # 手动将None转换为undefined（而非null）
        show_button1 = slider_1.getRating() is not None
        print(slider_1.getRating())

        if show_button1:
            Qmark1.text = slider_1.getRating()
      Each JS Frame:
        show_button1 = (slider_1.getRating() !== undefined);
        if (show_button1) {
            Qmark1.text = slider_1.getRating();
        }
    TextComponent A_6
      color = red
      letterHeight = 0.03
      pos = (-0.2, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $anumA
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    TextComponent B_6
      color = lightskyblue
      letterHeight = 0.03
      pos = (0.2, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $anumB
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    TextComponent C_6
      color [set every repeat] = orange
      letterHeight = 0.03
      pos = (-0.2, -0.06)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $anumC
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    TextComponent pt1_L_trial
      letterHeight = 0.03
      pos [set every repeat] = (-0.38, -0.41)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $L_L
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    TextComponent pt1_R_trial
      letterHeight = 0.03
      pos [set every repeat] = (0.38, -0.41)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $L_R
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    ImageComponent QUESTION_123
      image [set every repeat] = $Q1
      interpolate = nearest
      pos = (0, -0.24)
      size = (0.64, 0.107)
      startVal [time (s)] = 0.0
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Flow
  Routine practice
  LoopInitiator practice_loop loopType="TrialHandler"
    conditionsFile = practice.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'numA': '##', 'numB': '##', 'changeA': '##', 'changeB': '##', 'playerC': '##', 'delaytime_prac': '##', 'symbol': 'changeup.png', 'cr': 'change.png', 'anumA': '####', 'anumB': '####', 'anumC': '####', 'posi_X': [0.4, 0.35], 'posi_rect': [0.2, 0.35]},
      {'numA': '##', 'numB': '##', 'changeA': '##', 'changeB': '##', 'playerC': '##', 'delaytime_prac': '##', 'symbol': 'sameorange.png', 'cr': 'remain.png', 'anumA': '####', 'anumB': '####', 'anumC': '####', 'posi_X': [-0.4, 0.35], 'posi_rect': [-0.2, 0.35]}]
    Routine rest_practice
    LoopInitiator Q1_3_practice loopType="TrialHandler"
      conditionsFile = $Q_LOOP+".xlsx"
      loopType = sequential
      nReps = 1
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      Routine practice_trial1_3
    LoopTerminator Q1_3_practice
    Routine practice_trial4
  LoopTerminator practice_loop
  Routine start
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = $GN+".xlsx"
    loopType = sequential
    nReps = 1
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    Routine start_pic
    LoopInitiator trials_loop loopType="TrialHandler"
      conditionsFile = $file_name
      loopType = random
      nReps = 1
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      Routine rest
      LoopInitiator Q1_3_trials loopType="TrialHandler"
        conditionsFile = $Q_LOOP+".xlsx"
        loopType = sequential
        nReps = 1
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        Routine trial1_3
      LoopTerminator Q1_3_trials
      Routine trial4
    LoopTerminator trials_loop
    Routine over
  LoopTerminator blocks
